CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "dapi")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "lc3")
    Name to assign these images:LC3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DAPI
    Name the output image:SmoothDAPI
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:16.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:SmoothDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:LC3
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    Regularization factor:0.05
    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Automatic
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
RunImageJ:[module_num:8|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:rename("input");\\u000arun("LoG 3D...", "sigmax=2 sigmay=2 sigmaz=2 displaykernel=0 volume=1");\\u000aselectWindow("LoG of input");\\u000arename("output");\\u000aselectWindow("input");\\u000aclose();\\u000aselectWindow("output");\\u000arun("Invert");\\u000arun("8-bit");\\u000arun("Auto Threshold", "method=Otsu white");\\u000a\\u000a
    Macro language:Python
    Input the currently active image in ImageJ?:Yes
    Select the input image:LC3
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:LoG_LC3
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:LoG_LC3
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:SpotOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.1
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LC3
    Name the output image:spotsImage
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Spots
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
